PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'participant_elo': '1600'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = chess_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.2
      text = Hello world!
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  Routine routine_2_back
  Routine chess_puzzle
    MouseComponent mouse
      clickable = white_pieces
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent chess_board
      image = images/board_2.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0
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    CodeComponent move_piece
      Code Type = Py
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      Before Experiment:
        import time
        import chess

        def coord_to_pos(coord):
            '''Convert coordinate system to
            position (in units of screen height)'''
            if type(coord) == int:
                pos = (coord/8) - 9/16
            else:
                pos = [0, 0]
                for i in range(len(coord)):
                    pos[i] = (coord[i]/8) - 9/16
            return pos

        def pos_to_coord(pos):
            '''Convert position (in units of screen height)
            to coordinate system'''
            if type(pos) == int:
                coord = int(round((pos + 9/16) * 8))
            else:
                coord = [1, 1]
                for i in range(len(pos)):
                    coord[i] = int(round((pos[i] + 9/16) * 8))
            return coord

        def code_to_coord(code):
            '''Convert FEN code to coordinate system'''
            x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]
            x_pos = x_axis.index(code[0]) + 1
            y_pos = int(code[1])
            return [x_pos, y_pos]

        def coord_to_code(coord):
            '''Convert coord to UCI move code'''
            x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]
        #    print(f"COORD: {coord}")
            index = coord[0] - 1
        #    print(f"INDEX: {index}")
            x_code = x_axis[index]
            y_code = coord[1]
            return f"{x_code}{y_code}"


        def lerp_position(start_pos, end_pos, fraction):
            '''Linear interpolation between two points'''
            move_vector = np.subtract(end_pos, start_pos)
            current_pos = start_pos + (fraction * move_vector)
            return current_pos

        def create_piece(code, x, y, i):
            '''Initialize and display a chess piece'''
            if code.islower():
                image_path = "images/" + code + ".png"
            else:
                image_path = "images/" + code + "_w.png"
            x_pos = coord_to_pos(x)
            y_pos = coord_to_pos(y)
            piece = visual.ImageStim(win=win, name=(code + str(x) + str(y)), image=image_path,
            anchor="center", pos=(x_pos, y_pos), size=(1/10, 1/10), depth = (-10 - i),
            texRes=128.0, interpolate=True)
            return piece

        def create_pieces(fen, board_state):
            '''Create all pieces in the FEN'''
            x = 1
            y = 8
            for i in range(len(fen[0])):
                element = fen[0][i]
                if (element == "/"):
                    x = 1
                    y -= 1
                if (element.isdigit()):
                    x += int(element)
                if (element in piece_codes):
                    piece = create_piece(element, x, y, i)
                    piece.setAutoDraw(True)
                    if element.isupper():
                        white_pieces.append(piece)
                    else:
                        black_pieces.append(piece)
                    board_state[y][x] = piece.name
                    x += 1
            return white_pieces, black_pieces, board_state

        def draw_square(code):
            coord = code_to_coord(code)
            x_pos = coord_to_pos(coord[0])
            y_pos = coord_to_pos(coord[1])

            polygon = visual.Rect(
                win=win, name=(code + '_square'),
                width=(1/8), height=(1/8),
                ori=0.0, pos=(x_pos, y_pos), anchor='center',
                lineWidth=0,     colorSpace='rgb',  lineColor=[0, 0, 0], fillColor=[249/256, 194/256, 46/256],
                depth=-5, interpolate=True)
            polygon.setAutoDraw(True)
            return polygon

        def search_pieces(piece_array, piece_name):
            '''Search for a piece in array by piece.name'''
            for piece in piece_array:
                if piece_name == piece.name:
                    return piece
            print("Warning: Did not find piece by name " + piece_name + " in array.")
            return None

        def evaluate_move(board_state, enemy_pieces, player_pieces, target_square):
            '''See if player move is taking an enemy piece'''
        #    print(target_square)
            target_square_content = board_state[target_square[1]][target_square[0]]
            if target_square_content:
                piece_to_take = search_pieces(enemy_pieces, target_square_content)
                if piece_to_take is None:
                    piece_to_take = search_pieces(player_pieces, target_square_content)
                return piece_to_take

        def move_piece(time_elapsed, piece, start_coord, end_coord, move_time):
            '''Move piece by a certain amount this frame'''
            start_pos = coord_to_pos(start_coord)
            end_pos = coord_to_pos(end_coord)
            move_finished = False
            if (time_elapsed < move_time):
                piece.pos = lerp_position(start_pos, end_pos, time_elapsed / move_time)
            else:
                piece.pos = end_pos
                move_finished = True
            return piece, move_finished

        def begin_move(piece, start_coord, end_coord):
            '''Initiate the computer movemement of a piece'''
            if piece is None:
                return None
            else:
                return piece, start_coord, end_coord

        def update_board_state(board_state, old_coord, new_coord, value):
            '''Update the board state matrix
            when a piece changes squares'''
            board_state[new_coord[1]][new_coord[0]] = value

            if board_state[old_coord[1]][old_coord[0]] == value: # Only delete old entry if it has not already been replaced
                board_state[old_coord[1]][old_coord[0]] = ''

        #    for row in board_state:
        #        print(row)

            return board_state


        def clear_pieces(pieces):
            for piece in pieces:
                piece.setAutoDraw(False)
        #        piece._unload()

        # Could combine this function with evaluate_move():
        def check_valid_move(board_state, player_pieces, coord, possible_moves):
            '''See if player move is valid'''
            target_square_content = board_state[coord[1]][coord[0]]
            if coord[0] < 1 or coord[0] > 8 or coord[1] < 1 or coord[1] > 8:
                return False
            elif search_pieces(player_pieces, target_square_content):
                return False
            elif coord not in possible_moves:
                return False
            else:
                return True

        def check_correct_move(move_num, moves, start_coord, end_coord):
            correct_start = code_to_coord(moves[move_num][0:2])
            correct_end = code_to_coord(moves[move_num][2:4])
            if (start_coord == correct_start) and (end_coord == correct_end):
                return True
            else:
                return False

        def find_empty_take_square(board_state):
            num_cols = 3

            target = [9,8]
            while board_state[target[1]][target[0]]:
                if target[0] == 8 + num_cols:
                    target[0] = 9
                    target[1] = target[1] - 1
                else:
                    target[0] = target[0] + 1
            return target


        def start_enemy_move(moves, move_num, board_state, enemy_pieces):
            # Generate yellow rectangles over first black move
            move_start = moves[move_num][0:2]
            move_end = moves[move_num][2:4]
            highlight_squares = []
            for move in [move_start, move_end]:
                highlight_squares.append(draw_square(move))

            # Begin first move
            # This code needs to be generalized in a function
            start_coord = code_to_coord(move_start)
            end_coord = code_to_coord(move_end)
            piece_name = board_state[start_coord[1]][start_coord[0]]

            moving_piece = search_pieces(enemy_pieces, piece_name)

            return moving_piece, start_coord, end_coord, highlight_squares

        def scan_legal_moves(board_lib, piece):
            piece_coord = pos_to_coord(piece.pos)
            start = coord_to_code(piece_coord)

            legal_moves = board_lib.legal_moves
            x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]

            possible_moves = []

            for x in range(1,9):
                for y in range(1,9):

                    uci_code = f"{start}{x_axis[x-1]}{y}"
                    if uci_code[0:2] == uci_code[2:4]:
                        continue
                    move = chess.Move.from_uci(uci_code)
                    if move in legal_moves:
                       possible_moves.append([x, y])

            return possible_moves

        def draw_possible_moves(possible_moves):
            image_path = "images/valid_move.png"
            valid_move_highlights = []

            for move in possible_moves:
                x_pos = coord_to_pos(move[0])
                y_pos = coord_to_pos(move[1])

                highlight = visual.ImageStim(win=win, name=f"highlight", image=image_path,
                anchor="center", pos=(x_pos, y_pos), size=(1/8, 1/8), depth = -20,
                texRes=128.0, interpolate=True)
                highlight.setAutoDraw(True)

                valid_move_highlights.append(highlight)

            return valid_move_highlights

        def check_uci_move(board_lib, start_coord, end_coord):
            '''Update python chess board representation'''
            uci_code = coord_to_code(start_coord) + coord_to_code(end_coord)

            move = chess.Move.from_uci(uci_code)

            castling_king = board_lib.is_kingside_castling(move)
            castling_queen = board_lib.is_queenside_castling(move)

            en_passant = board_lib.is_en_passant(move)

        #    if move in board_lib.legal_moves:
        #        board_lib.push(move)  # Make the move
        #    else:
        #        print("Illegal move. May be a castling rook move.")
        #        print(f"Start coord: {start_coord}; End coord: {end_coord}")

        #    board_lib.push(move)  # Make the move

            return move, castling_king, castling_queen, en_passant

        def make_en_passant_move(piece, white_pieces, black_pieces, board_state, end_coord):
        #    print("EN PASSANT MOVE")
            target_square_content = []
            piece_taken = []
            if piece in white_pieces:
                target_square_content = board_state[end_coord[1] - 1][end_coord[0]]
                piece_taken = search_pieces(black_pieces, target_square_content)
            elif piece in black_pieces:
                target_square_content = board_state[end_coord[1] + 1][end_coord[0]]
                piece_taken = search_pieces(white_pieces, target_square_content)
        #    print(f"PIECE TAKEN: {piece_taken.name}")
            return piece_taken

        def try_pawn_promotion(piece, end_coord):
            if end_coord[1] in [1, 8]:
                if "P" in piece.name:
                    print("PAWN PROMOTION")
                    piece.image = "images/q_w.png"
                elif "p" in piece.name:
                    print("PAWN PROMOTION")
                    piece.image = "images/q.png"
            return None

        def start_rook_castle(pieces, start_coord, end_coord):
            '''Move rook to target square during castling move'''

            target_square_content = board_state[start_coord[1]][start_coord[0]]

        #    for piece in pieces:
        #        print(f"Piece name: {piece.name}")
        #    print(f"Target square content: {target_square_content}")

            target_rook = search_pieces(pieces, target_square_content)
            moving_piece, start_coord, end_coord = begin_move(target_rook, start_coord, end_coord)

            return moving_piece, start_coord, end_coord

        def try_castling_move(castling_king, castling_queen, pieces, player_color):
            moving_piece = None
            start_coord = []
            end_coord = []

            if castling_king:
                print("CASTLING KINSIDE")
                if player_color == "b":
                    # move rook g1e1
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [8,1], [6,1])
                elif player_color == "w":
                    # move rook a8c8
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [8,8], [6,8])
            elif castling_queen:
                print("CASTLING QUEENSIDE")
                if player_color == "b":
                    # move rook a1d1
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [1,1], [4,1])
                elif player_color == "w":
                    # move rook g8e8
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [1,8], [4,8])

            return moving_piece, start_coord, end_coord




        feedback_text = ''
        correct_color = "springgreen"
        incorrect_color = "red"

        puzzle_time = 0

        # Data for piece codes and x axis labels
        piece_codes = ["p", "n", "b", "r", "q", "k", "P", "N", "B", "R", "Q", "K"]

        # Time it takes for a piece to move from A to B
        # Could instead make it a speed parameter
        move_time = 1
      Begin Routine:
        # Begin Routine

        # Initialize board state and piece arrays
        board_state = [['' for i in range(12)] for i in range(9)]
        white_pieces = []
        black_pieces = []

        # Chess board from chess library

        board_lib = chess.Board()
        board_lib.set_fen(FEN)

        # For testing: sample FEN string
        fen_str = FEN
        fen = fen_str.split(" ")

        moves_str = moves
        moves = moves_str.split()

        # Populate the board based on the FEN
        white_pieces, black_pieces, board_state = create_pieces(fen, board_state)
        clicked_piece = None

        player_pieces = []
        enemy_pieces = []

        player_color = fen[1]

        # Identify player and enemy
        if player_color == "b":
            player_pieces = white_pieces
            enemy_pieces = black_pieces
        elif player_color == "w":
            player_pieces = black_pieces
            enemy_pieces = white_pieces
        else:
            raise Exception("ERROR: FEN does not have team label.")


        # Set up first computer move
        enemy_move = True
        move_num = 0

        moving_piece, start_coord, end_coord, highlight_squares = start_enemy_move(moves, move_num, board_state, enemy_pieces)

        # Initialize computer movement clock
        move_clock = core.Clock()
        move_clock.reset(newT=0.0)

        # Start mouse clock
        # This is for a click cooldown to prevent accidental double-clicking
        mouse_clock = core.Clock()
        mouse_clock.addTime(100)

        # Track correct/incorrect moves
        player_move_start = []
        possible_moves = []
        valid_move_highlights = []
        correct_move = True

        #global global_clock

        puzzle_clock = core.Clock()
        puzzle_time = puzzle_clock.getTime()

        timeout_clock = core.Clock()
        timout_time = 0
        timeout = False

        feedback_text = ''
        chess_feedback.text = feedback_text

        is_castling_move = False
      Each Frame:
        # Each Frame

        puzzle_time = puzzle_clock.getTime()
        global_time = global_clock.getTime()

        if timeout:
            timeout_time = timeout_clock.getTime()
            if timeout_time > 2:
                continueRoutine = False
        elif puzzle_time > 30: # Puzzle timeout
            feedback_text = "Out of time"
            chess_feedback.text = feedback_text
            chess_feedback.color = incorrect_color

            timeout_clock.reset()
            timeout = True
            thisChess_trial["max_time"] = 1

        elif global_time > 180: # Block timeout
            feedback_text = "Out of time:\nBlock over"
            chess_feedback.text = feedback_text
            chess_feedback.color = "black"

            timeout_clock.reset()
            timeout = True
            thisChess_trial["max_time"] = 1
            chess_trials.finished = True

        # Update clock displays
        puzzle_timer.text = time.strftime('%M:%S', time.gmtime(30 - puzzle_time))
        global_timer.text = time.strftime('%M:%S', time.gmtime(global_time))

        # Code executed if a piece is crrently being
        # moved by the computer
        if moving_piece is not None:
            time_elapsed = move_clock.getTime()
            moving_piece, move_finished = move_piece(time_elapsed, moving_piece, start_coord, end_coord, move_time)
            if move_finished:

                # Check for castling
                    # if piece is king or rook
                        # and target is rook or king of same colour
                            # swap places

                piece_taken = evaluate_move(board_state, enemy_pieces, player_pieces, end_coord)

                if end_coord[0] < 9: # Not moving piece off board

                    move, castling_king, castling_queen, en_passant = check_uci_move(board_lib, start_coord, end_coord)
                    if not is_castling_move:
                        board_lib.push(move)

                    # En passant
                    if en_passant:
                        piece_taken = make_en_passant_move(moving_piece, white_pieces, black_pieces, board_state, end_coord)

                    # Castling
                    if castling_king or castling_queen:
                        pieces = []
                        if enemy_move:
                            pieces = enemy_pieces
                        else:
                            pieces = player_pieces
                        moving_piece, start_coord, end_coord = try_castling_move(castling_king, castling_queen, pieces, player_color)
                        is_castling_move = True
                    else:
                        is_castling_move = False

                    # Pawn promotion
                    try_pawn_promotion(moving_piece, end_coord)

                # Update custom board state representation
                board_state = update_board_state(board_state, start_coord, end_coord, moving_piece.name)

                # Reset clock
                move_clock.reset()

                if enemy_move:
                    move_num = move_num + 1
                    enemy_move = False

                if piece_taken:
                    take_coord = find_empty_take_square(board_state) # Create function to get empty coord
                    moving_piece, start_coord, end_coord = begin_move(piece_taken, end_coord, take_coord)
                else:
                    moving_piece = None

        # Check mouse click cooldown
        cooldown = mouse_clock.getTime() < 0.1

        if not timeout:
            # Check for piece selection
            if clicked_piece is None and moving_piece is None:
                for piece in player_pieces:                # for each pic
                    if not cooldown and mouse.isPressedIn(piece, buttons=[0]):    # If the picture is currently click
                        clicked_piece = piece
                        player_move_start = pos_to_coord(clicked_piece.pos)
                        mouse_clock.reset()

                        # Look for legal moves
                        possible_moves = scan_legal_moves(board_lib, clicked_piece)
                        valid_move_highlights = draw_possible_moves(possible_moves)

            # Check for piece placement
            elif clicked_piece is not None:
                clicked_piece.pos = mouse.getPos()

                if not cooldown and mouse.isPressedIn(clicked_piece, buttons=[0]):
                    snapped_coord = pos_to_coord(mouse.getPos())

                    # See if move is a redeposit
                    redeposit = False
                    if snapped_coord == player_move_start:
                        redeposit = True

                    valid_move = check_valid_move(board_state, player_pieces, snapped_coord, possible_moves)

                    if redeposit:
                        clicked_piece.pos = coord_to_pos(snapped_coord)
                        clicked_piece = None
                        clear_pieces(valid_move_highlights)

                    elif valid_move:

                        clicked_piece.pos = coord_to_pos(snapped_coord)
                        piece_taken = evaluate_move(board_state, enemy_pieces, player_pieces, snapped_coord)

                        clear_pieces(valid_move_highlights)

                        # Reset clock
                        move_clock.reset()

                        if snapped_coord[0] < 9: # Not moving piece off board

                            move, castling_king, castling_queen, en_passant = check_uci_move(board_lib, player_move_start, snapped_coord)
                            if not is_castling_move:
                                board_lib.push(move)

                            # En passant
                            if en_passant:
                                piece_taken = make_en_passant_move(clicked_piece, white_pieces, black_pieces, board_state, snapped_coord)

                            # Castling
                            if castling_king or castling_queen:
                                moving_piece, start_coord, end_coord = try_castling_move(castling_king, castling_queen, player_pieces, player_color)
                                is_castling_move = True
                            else:
                                is_castling_move = False

                            # Pawn promotion
                            try_pawn_promotion(clicked_piece, snapped_coord)

                        board_state = update_board_state(board_state, player_move_start, snapped_coord, clicked_piece.name)

                        if piece_taken:
                            take_coord = find_empty_take_square(board_state)
                            moving_piece, start_coord, end_coord = begin_move(piece_taken, snapped_coord, take_coord)

                        clicked_piece = None

                        # Check for correct move or end of puzzle
                        correct_move = check_correct_move(move_num, moves, player_move_start, snapped_coord)


                        if (correct_move == False) or (move_num == len(moves) - 1):
                            feedback_text = "Correct" if correct_move else "Incorrect"
                            chess_feedback.text = feedback_text
                            if correct_move:
                                chess_feedback.color = correct_color
                            else:
                                chess_feedback.color = incorrect_color

                            timeout_clock.reset()
                            timeout = True

                        else:
                            clear_pieces(highlight_squares)
                            move_num = move_num + 1
                            enemy_move = True

                    mouse_clock.reset()

            if enemy_move and (moving_piece is None):
                moving_piece, start_coord, end_coord, highlight_squares = start_enemy_move(moves, move_num, board_state, enemy_pieces)
      End Routine:
        # Set trial data
        if feedback_text == "Correct":
            thisChess_trial["correct_answer"] = 1
        else:
            thisChess_trial["correct_answer"] = 0

        if thisChess_trial["timed_out"] is not 1:
            thisChess_trial["timed_out"] = 0


        clear_pieces(white_pieces)
        clear_pieces(black_pieces)
        clear_pieces(highlight_squares)
        clear_pieces(valid_move_highlights)

        win.flip()
    TextComponent chess_feedback
      letterHeight = 0.05
      pos = (-5/8, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $feedback_text
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    TextComponent puzzle_timer
      letterHeight = 0.05
      pos = (-5/8, 2/8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $puzzle_time
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    TextComponent global_timer
      letterHeight = 0.05
      pos = (-5/8, 3/8)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine two_back
    TextComponent fixation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine instructions_two_back
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the 2-back experiment.

        Look at the letter appearing on the screen. Your task is to remember the letter appearing two steps before the current letter. If the current letter is the same as the letter two steps before, e.g. an 'X' followed by a 'Y' followed by another 'X', press the spacebar.

        Press 'space' to begin.
    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_chess_puzzle
    TextComponent chess_instructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instructions slide

        Complete the chess puzzles.
    KeyboardComponent start_block
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent global_timer_start
      Code Type = Py
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      Before Experiment:
        ## Initialize global clock var
        global_clock = core.Clock()
        global_time = 0
      End Routine:
        ## Start clock for the block
        global_clock.reset()
  Routine feedback
    TextComponent feedback_text_slide
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $feedback_text
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  Routine intro
    TextComponent intro_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    KeyboardComponent start_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  LoopInitiator chess_levels loopType="TrialHandler"
    conditionsFile = conditions_chess_levels.tsv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('session', 1), ('difficulty', 500)]),
      OrderedDict([('session', 2), ('difficulty', 1600)]),
      OrderedDict([('session', 3), ('difficulty', 2500)])]
    Routine instructions_chess_puzzle
    LoopInitiator chess_trials loopType="TrialHandler"
      conditionsFile = conditions_chess.tsv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('FEN', '8/1p3p1k/6r1/p1p2KR1/P2pP3/1P1P4/2P5/8 b - - 8 52'), ('moves', 'g6g5 f5g5')]),
        OrderedDict([('FEN', '5rk1/p5pp/4Q3/8/1P1P4/2P1q2P/P2p1RP1/5RK1 b - - 0 30'), ('moves', 'e3e6 f2f8')]),
        OrderedDict([('FEN', '4r2k/1n4pp/p7/1p6/3p2R1/8/5PPP/3Qq1K1 w - - 1 37'), ('moves', 'd1e1 e8e1')]),
        OrderedDict([('FEN', '6k1/5ppq/8/p2r2B1/1p6/5P2/6PP/R3R2K b - - 0 37'), ('moves', 'd5g5 e1e8')]),
        OrderedDict([('FEN', '3k4/pp1P4/3KPr2/8/8/8/PP4Rp/8 b - - 0 56'), ('moves', 'h2h1q g2g8 f6f8 g8f8')]),
        OrderedDict([('FEN', '2R5/2b2pk1/4p1p1/1p1r4/1P5p/7P/6P1/R2r3K w - - 4 39'), ('moves', 'a1d1 d5d1')]),
        OrderedDict([('FEN', '6k1/p4p1p/4r1pP/1pKR1pP1/1P3r2/2P5/8/8 b - - 0 40'), ('moves', 'a7a6 d5d8 e6e8 d8e8')]),
        OrderedDict([('FEN', '8/1pRrk3/pP1p2p1/4p2p/1P2P2P/4P1P1/4K3/8 w - - 8 51'), ('moves', 'c7d7 e7d7')]),
        OrderedDict([('FEN', '5bk1/p4p1p/6p1/2p5/8/2P3Q1/4q1PP/4Rr1K w - - 2 32'), ('moves', 'e1f1 e2f1')]),
        OrderedDict([('FEN', '4rk1r/p1p3pp/5n2/8/5Q2/8/PP3PPP/3Rq1K1 w - - 1 22'), ('moves', 'd1e1 e8e1')]),
        OrderedDict([('FEN', '3r3k/5p1p/6p1/ppp5/5PQ1/2P5/5PPP/3q2K1 w - - 0 29'), ('moves', 'g4d1 d8d1')]),
        OrderedDict([('FEN', '1r6/1P6/3p4/3B1k2/2P3p1/6Pp/2r1RK1P/8 b - - 4 44'), ('moves', 'c2e2 f2e2')]),
        OrderedDict([('FEN', 'B1r3k1/p1p2ppp/1p4q1/2p1P3/2b2Pn1/P5P1/3R3P/3R2K1 b - - 0 23'), ('moves', 'c8a8 d2d8 a8d8 d1d8')]),
        OrderedDict([('FEN', '8/p1p4p/2p5/4r1p1/3kb1P1/1PN1R2P/P3K3/8 w - - 0 31'), ('moves', 'c3e4 e5e4 e3e4 d4e4')])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
      Routine chess_puzzle
    LoopTerminator chess_trials
  LoopTerminator chess_levels
  Routine instructions_two_back
  LoopInitiator trials_two_back loopType="TrialHandler"
    conditionsFile = conditions_twoback.tsv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('thisLetter', 'L'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'J'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'K'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 1), ('corrAns', 'space')])]
    Routine two_back
  LoopTerminator trials_two_back
